PsychoPy2experiment version="2023.2.3"
Settings
  Audio latency priority = 0
  Audio lib = ptb
  Experiment info = {'participant': 'lang001', 'session': '001'}
  Force stereo = False
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [3840, 1600]
  expName = language_cz_foreign_recognition
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial
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    SoundComponent sound_1
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine introduction
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Děkujeme vaší účast ve studii. Postupně uslyšíte 24 nahrávek a pro každou určíte, jakým nářečím je namluvená.

        Pro pokračování stiskněte mezerník
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_introduction
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = Za chvíli se spustí nahrávka
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    TextComponent text_trialN
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $f'Opakování {trials.thisN+1} z 24'
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  Routine trial_sound
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    SoundComponent sound_trial
      durationEstim = 30
      sound [set every repeat] = $stimulus
      startVal [time (s)] = 0.0
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  Routine trial_language_choice
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    ButtonComponent button_czstandard
      bold = False
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (-0.5, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0
      text = Standardní čeština
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    ButtonComponent button_cznonstandard
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      size = (0.3, 0.3)
      startVal [time (s)] = 0
      text = Nestandardní čeština
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    ButtonComponent button_foreign
      bold = True
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (0.5,0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0
      text = Cizí jazyk
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    TextComponent text_language_choice
      letterHeight = 0.05
      pos = (0, 0.75)
      startVal [time (s)] = 0.0
      text = Vyberte
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  Routine trial_certainty_choice
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    SliderComponent slider_certaity
      forceEndRoutine = True
      granularity = 0
      labels = "Zcela nejistá*ý", "Spíš nejistá*ý", "Středně jistá*ý", "Spíš jistá*ý", "Zcela jistá*ý"
      letterHeight = 0.02
      pos = (0, -0.2)
      size = (1.2, 0.2)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextComponent text_certainty
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0
      text = Jak moc jste si jistí svou volbou?
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  Routine thank_you
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Děkujeme za vaši účast
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  Routine testsettings
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $'settings/' + str(expInfo['participant']) + '.xlsx'
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  Routine code_checker
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    CodeComponent code_checksettings
      Code Type = Py
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      Before Experiment:
        import os
      Begin Routine:
        #settings_path = f'settings/{expInfo["participant"]}.xlsx'
        settings_path = f'settings/lang001.xlsx'
        print(settings_path)
        if not os.path.exists(settings_path):
            print(f"The file {settings_path} does not exist.")
            core.quit()
  Routine test_sound
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    SoundComponent sound_2
      durationEstim = 3
      sound [set every repeat] = stimuli/O1_1.wav
      startVal [time (s)] = 0.0
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Flow
  Routine code_checker
  Routine introduction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = settings/lang001.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'trial': 1, 'stimulus': 'stimuli/ST1_1.wav'},
      {'trial': 2, 'stimulus': 'stimuli/ST1_2.wav'},
      {'trial': 3, 'stimulus': 'stimuli/ST1_3.wav'},
      {'trial': 4, 'stimulus': 'stimuli/ST2_1.wav'},
      {'trial': 5, 'stimulus': 'stimuli/ST2_2.wav'},
      {'trial': 6, 'stimulus': 'stimuli/ST2_3.wav'},
      {'trial': 7, 'stimulus': 'stimuli/ST3_1.wav'},
      {'trial': 8, 'stimulus': 'stimuli/ST3_2.wav'},
      {'trial': 9, 'stimulus': 'stimuli/ST3_3.wav'},
      {'trial': 10, 'stimulus': 'stimuli/ST4_1.wav'},
      {'trial': 11, 'stimulus': 'stimuli/ST4_2.wav'},
      {'trial': 12, 'stimulus': 'stimuli/ST4_3.wav'},
      {'trial': 13, 'stimulus': 'stimuli/O1_1.wav'},
      {'trial': 14, 'stimulus': 'stimuli/O1_2.wav'},
      {'trial': 15, 'stimulus': 'stimuli/O1_3.wav'},
      {'trial': 16, 'stimulus': 'stimuli/O2_1.wav'},
      {'trial': 17, 'stimulus': 'stimuli/O2_2.wav'},
      {'trial': 18, 'stimulus': 'stimuli/O2_3.wav'},
      {'trial': 19, 'stimulus': 'stimuli/O3_1.wav'},
      {'trial': 20, 'stimulus': 'stimuli/O3_2.wav'},
      {'trial': 21, 'stimulus': 'stimuli/O3_3.wav'},
      {'trial': 22, 'stimulus': 'stimuli/O4_1.wav'},
      {'trial': 23, 'stimulus': 'stimuli/O4_2.wav'},
      {'trial': 24, 'stimulus': 'stimuli/O4_3.wav'}]
    Routine trial_introduction
    Routine trial_sound
    Routine trial_language_choice
    Routine trial_certainty_choice
  LoopTerminator trials
  Routine thank_you
